PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'以下为答题说明↓↓↓': '[\'请在"participant"一栏中输入您姓名的【全部拼音】\']', 'participant': '', '性别': "['男', '女']", '年龄': '', '支付宝账号(请与问卷中一致)': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['thirdphoto\\bugongpingchengdu.PNG', 'thirdphoto\\fenpei_honghuang.PNG', 'thirdphoto\\fenpei_honglan.PNG', 'thirdphoto\\fenpei_huanghong.PNG', 'thirdphoto\\fenpei_huanglan.PNG', 'thirdphoto\\fenpei_lanhong.PNG', 'thirdphoto\\fenpei_lanhuang.PNG', 'thirdphoto\\gamer_hong.PNG', 'thirdphoto\\gamer_huang.PNG', 'thirdphoto\\gamer_lan.PNG', 'thirdphoto\\neijiu2_hong.PNG', 'thirdphoto\\neijiu2_huang.PNG', 'thirdphoto\\neijiu2_lan.PNG', 'thirdphoto\\okbutton.png', 'thirdphoto\\player_hui.PNG', 'thirdphoto\\player_lv.PNG', 'thirdphoto\\player_zong.PNG', 'thirdphoto\\renwu_hong.PNG', 'thirdphoto\\renwu_huang.PNG', 'thirdphoto\\renwu_lan.PNG', 'thirdphoto\\TPPguize.png', 'thirdphoto\\wupei_honghuang.PNG', 'thirdphoto\\wupei_honglan.PNG', 'thirdphoto\\wupei_huanghong.PNG', 'thirdphoto\\wupei_huanglan.PNG', 'thirdphoto\\wupei_lanhong.PNG', 'thirdphoto\\wupei_lanhuang.PNG']
  Screen = 1
  Units = norm
  Window size (pixels) = [1440, 900]
  color = white
  expName = 点估计
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Routines
  Routine trial
    ImageComponent randomdot
      image [set every repeat] = $imagefile
      saveStartStop = False
      size = [2,2]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      units = norm
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    TextComponent more
      color = black
      letterHeight = 0.1
      pos = (-0.5, -0.5)
      saveStartStop = False
      startVal [time (s)] = 1.5
      text = 大于
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    TextComponent less
      color = black
      letterHeight = 0.1
      pos = (0.5, -0.5)
      saveStartStop = False
      startVal [time (s)] = 1.5
      text = 小于
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    KeyboardComponent dot_resp
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 1.5
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    TextComponent F
      color = black
      letterHeight = 0.1
      pos = (-0.5, -0.65)
      saveStartStop = False
      startVal [time (s)] = 1.5
      text = F
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    TextComponent J
      color = black
      letterHeight = 0.1
      pos = (0.5, -0.65)
      saveStartStop = False
      startVal [time (s)] = 1.5
      text = J
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    PolygonComponent redcircle
      fillColor = white
      lineColor = red
      lineWidth = 5
      saveStartStop = False
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 1.5
      units = height
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    TextComponent number
      color = black
      letterHeight = 0.2
      saveStartStop = False
      startVal [time (s)] = 1.5
      text [set every repeat] = $dotnum
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  Routine fixation
    PolygonComponent polygon
      durationEstim = 0.65
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5+0.3*random()
      units = height
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  Routine ITI
    TextComponent kongping
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
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  Routine pipei
    TextComponent text_5
      color = black
      durationEstim = 3
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2+1.6*random()
      text = 匹配中，请稍等…
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  Routine chengong
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        playerlist=['红方','蓝方','黄方']
      Begin Routine:
        shuffle(playerlist)
        randfake=playerlist.pop()

        thisExp.addData('randfake',randfake)
        randplayer1 = '匹配成功\n\n您将与[' + str(randfake)
        randplayer = randplayer1 +'玩家]共同完成游戏\n\n游戏即将开始，请做好准备'


        if randfake == '红方':
            fakepic = 'thirdphoto/gamer_hong.PNG'
        elif randfake == '黄方':
            fakepic = 'thirdphoto/gamer_huang.PNG'
        else :
            fakepic = 'thirdphoto/gamer_lan.PNG'
    ImageComponent image_9
      image [set every repeat] = $fakepic
      saveStartStop = False
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.5
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    TextComponent text_6
      color = black
      letterHeight = 0.1
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.5
      text [set every repeat] = $randplayer
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  Routine feedback3
    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Experiment:
        feedbacklist1=['错误','错误','错误','正确','错误','正确','正确','错误','正确','错误','错误','错误']
        feedbacklist2=['正确','正确','正确','正确','正确','错误','正确','正确','错误','错误','正确','正确']
        feedcolor1 = ''
        feedcolor2 = ''
      Begin Routine:
        thisfeedback1=feedbacklist1.pop()
        thisfeedback2=feedbacklist2.pop()
        thisExp.addData('thisfeedback1',thisfeedback1)
        thisExp.addData('thisfeedback2',thisfeedback2)
        if thisfeedback1 == '正确' :
            feedcolor1 = 'green'
        else:
            feedcolor1 = 'red'
        if thisfeedback2 == '正确' :
            feedcolor2 = 'green'
        else:
            feedcolor2 = 'red'

        realfeed11 ='您[' + str(selectedcolor)
        realfeed1 = realfeed11 + '玩家]估计'
        realfeed22 ='伙伴[' + str(randfake)
        realfeed2 = realfeed22 + '玩家]估计'

        if (thisfeedback1 == '正确') and (thisfeedback2 == '正确'):
            getcoin = '本轮获得5个金币'
        else:
            getcoin = '本轮未获得金币'
    TextComponent text_4
      color = black
      letterHeight = 0.1
      pos = (-0.125, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $realfeed1
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    TextComponent text_8
      color = black
      letterHeight = 0.1
      pos = (-0.15, -0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $realfeed2
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    TextComponent player1_TF
      color [set every repeat] = $feedcolor1
      letterHeight = 0.1
      pos = (0.2, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $thisfeedback1
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    TextComponent player2_TF
      color [set every repeat] = $feedcolor2
      letterHeight = 0.1
      pos = (0.2, -0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $thisfeedback2
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    TextComponent text_35
      color = black
      letterHeight = 0.1
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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      text [set every repeat]:
        $getcoin
  Routine feedback1
    ImageComponent image_3
      image [set every repeat] = $feedbacktext1
      saveStartStop = False
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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  Routine start
    TextComponent text_3
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = 游戏开始，请做好准备
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  Routine practice
    ImageComponent image123
      image = shashin\zhidaoyu.png
      saveStartStop = False
      size = (2, 2)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine practiceend
    ImageComponent img_practice_end
      image = shashin\practice_end.png
      saveStartStop = False
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    KeyboardComponent key_resp_2
      allowedKeys = 'space','p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Auto->JS
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      End Routine:
        if key_resp_2.keys == "space" :
            trials_2.finished= 1
  Routine chouhao
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Experiment:
        selectedcolor=''
      End Routine:
        if key_resp_3.keys == '1':
            selectedcolor = '灰方'
        elif key_resp_3.keys == '2':
            selectedcolor = '绿方'
        else:
            selectedcolor = '棕方'

        thisExp.addData('selectedcolor',selectedcolor)
    ImageComponent image_4
      image = shashin\chosecolor.png
      saveStartStop = False
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    KeyboardComponent key_resp_3
      allowedKeys = '1','2','3'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trail1
    ImageComponent randomdot_2
      image [set every repeat] = $imagefile1
      saveStartStop = False
      size = [2,2]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      units = norm
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    TextComponent more_2
      color = black
      letterHeight = 0.1
      pos = (-0.5, -0.5)
      saveStartStop = False
      startVal [time (s)] = 1.5
      text = 大于
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    TextComponent less_2
      color = black
      letterHeight = 0.1
      pos = (0.5, -0.5)
      saveStartStop = False
      startVal [time (s)] = 1.5
      text = 小于
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    KeyboardComponent dot_resp_2
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 1.5
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    TextComponent F_2
      color = black
      letterHeight = 0.1
      pos = (-0.5, -0.65)
      saveStartStop = False
      startVal [time (s)] = 1.5
      text = F
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    TextComponent J_2
      color = black
      letterHeight = 0.1
      pos = (0.5, -0.65)
      saveStartStop = False
      startVal [time (s)] = 1.5
      text = J
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    PolygonComponent redcircle_2
      fillColor = white
      lineColor = red
      lineWidth = 5
      saveStartStop = False
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 1.5
      units = height
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    TextComponent number_2
      color = black
      letterHeight = 0.2
      saveStartStop = False
      startVal [time (s)] = 1.5
      text [set every repeat] = $dotnum1
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  Routine nichengfenpei
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        numdisplay = "您为自己选择的昵称为：" + selectedcolor

        if selectedcolor == '灰方':
            selectedpic = 'thirdphoto/player_hui.PNG'
        elif selectedcolor == '绿方':
            selectedpic = 'thirdphoto/player_lv.PNG'
        else :
            selectedpic = 'thirdphoto/player_zong.PNG'
    ImageComponent image_8
      image [set every repeat] = $selectedpic
      saveStartStop = False
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      units = norm
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    TextComponent text_7
      color = black
      letterHeight = 0.1
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $numdisplay
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    TextComponent text
      color = black
      letterHeight = 0.1
      pos = (0, -0.55)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        现在我们将为您匹配游戏合作伙伴
  Routine Attention
    TextComponent text_9
      color = black
      letterHeight = 0.1
      pos = (-0.2, 0)
      startVal [time (s)] = 0.0
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      text:
        请在游戏开始前将电脑的输入法调整为：英文模式

                        调整完毕，请按空格键
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine math
    TextComponent mathproblem
      color = black
      letterHeight = 0.3
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $mathmatter
      units = norm
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    TextComponent input_sig
      color = black
      letterHeight = 0.08
      pos = (0, -0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 请按键选择正确的答案
      units = norm
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    TextComponent select_ans
      color = black
      letterHeight = 0.1
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $math_answer
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    KeyboardComponent key_mathans
      allowedKeys = '1','2','3','4'
      correctAns = $math_corr
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine ceshi
    ImageComponent image_6
      image = shashin\jiance.png
      saveStartStop = False
      size = (2, 2)
      startVal [time (s)] = 0.0
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    KeyboardComponent wanjia_name_6
      allowedKeys = '1','2','3','4','5','6'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine zuihoua
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent zuihounene
      image = shashin\zuihoune.png
      saveStartStop = False
      size = (2, 2)
      startVal [time (s)] = 0.0
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  Routine tongjia
    TextComponent text_10
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = 请稍等，系统正在统计双方结果。
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  Routine jieguonene
    KeyboardComponent ends_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    ImageComponent image_2
      image = shashin\neijiu.png
      saveStartStop = False
      size = (2, 2)
      startVal [time (s)] = 0.0
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  Routine guilt1
    ImageComponent image_5
      image = shashin\neijiuchengdu.png
      saveStartStop = False
      size = (2, 2)
      startVal [time (s)] = 0.0
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    KeyboardComponent guilt1_ping_5
      allowedKeys = '1','2','3','4','5','6','7'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine chengshangqixia
    TextComponent text_2
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        即将进入第二个阶段的游戏

              请做好准备
  Routine youxi2jieshao
    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        jieshaotxt1 = '接下来，您和估计游戏的同伴[' + str(randfake)
        jieshaotxt = jieshaotxt1 +'玩家]将\n\n与另一名玩家一起抽取金钱分配游戏中的角色'
    TextComponent text_11
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.5
      text [set every repeat] = $jieshaotxt
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  Routine anotherwanjia
    CodeComponent code_14
      Code Type = Auto->JS
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      Begin Routine:
        shuffle(playerlist)
        randfake2 =playerlist.pop()

        thisExp.addData('randfake2',randfake2)

        gamer2txt1 = '另一名玩家为[' + str(randfake2)
        gamer2txt2 = gamer2txt1 + '玩家]'


        if randfake2 == '红方':
            fakepic2 = 'thirdphoto/gamer_hong.PNG'
        elif randfake2 == '黄方':
            fakepic2 = 'thirdphoto/gamer_huang.PNG'
        else :
            fakepic2 = 'thirdphoto/gamer_lan.PNG'
    ImageComponent image_7
      image [set every repeat] = $fakepic2
      saveStartStop = False
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent text_16
      color = black
      letterHeight = 0.1
      pos = (0, -0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $gamer2txt2
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  Routine chouxuanren1
    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        chouxuantxt1 = '现在，系统将从[' + str(selectedcolor)
        chouxuantxt2 = '玩家]、[' + str(randfake)
        chouxuantxt3 = '玩家]、[' + str(randfake2)
        chouxuantxt4 = '玩家]中'
        chouxuantxt =chouxuantxt1 + chouxuantxt2 +chouxuantxt3 + chouxuantxt4
    TextComponent text_13
      color = black
      letterHeight = 0.08
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
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      text [set every repeat]:
        $chouxuantxt
    TextComponent text_23
      color = black
      letterHeight = 0.08
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
      text = 抽取2名玩家参与一项金钱分配游戏
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    TextComponent text_17
      color = black
      letterHeight = 0.08
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
      text = 由于此游戏只有2个角色，因此每位玩家抽中的概率是2/3
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  Routine tppguizene
    ImageComponent image
      image = thirdphoto\TPPguize.png
      saveStartStop = False
      size = (2, 2)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine renwujieshao
    CodeComponent code_11
      Code Type = Auto->JS
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      Begin Routine:
        if randfake == '红方':
            rewnwupic = 'thirdphoto/renwu_hong.PNG'
        elif randfake == '蓝方':
            rewnwupic = 'thirdphoto/renwu_lan.PNG'
        else :
            rewnwupic = 'thirdphoto/renwu_huang.PNG'
    ImageComponent image_10
      image [set every repeat] = $rewnwupic
      saveStartStop = False
      size = (2, 2)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine dengdaifenpei
    CodeComponent code_9
      Code Type = Auto->JS
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      Begin Routine:
        dengdaitxt1 = '现在请稍等片刻，等['+ str(randfake)
        dengdaitxt = dengdaitxt1 + '玩家]提出方案后，'
    TextComponent text_15
      color = black
      letterHeight = 0.08
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text [set every repeat]:
        $dengdaitxt
    TextComponent text_22
      color = black
      letterHeight = 0.08
      pos = (0, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = 系统将给您呈现分配者方案，
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    TextComponent text_25
      color = black
      letterHeight = 0.08
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = 您的惩罚与否只会影响到分配者的最终收益
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  Routine fenpeijiemian
    CodeComponent code_12
      Code Type = Auto->JS
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      Begin Routine:
        randnumfenpei = 5*random()
        randintfenpei = 63 + int(randnumfenpei)
        randintfenpei2 = 100 - randintfenpei

        thisExp.addData('randintfenpei',randintfenpei)

        fenpeizhetxt1 = str(randfake) + '玩家将获得'
        fenpeizhetxt2 = str(randintfenpei) + '个金币'
        fenpeizhetxt = fenpeizhetxt1 + fenpeizhetxt2

        jieshouzhetxt1 = str(randfake2) + '玩家将获得'
        jieshouzhetxt2 = str(randintfenpei2) + '个金币'
        jieshouzhetxt = jieshouzhetxt1 + jieshouzhetxt2

        if (randfake == '红方') and (randfake2 == '黄方'):
            fenpeipic = 'thirdphoto/fenpei_honghuang.PNG'
        elif (randfake == '红方') and (randfake2 == '蓝方'):
            fenpeipic = 'thirdphoto/fenpei_honglan.PNG'
        elif (randfake == '黄方') and (randfake2 == '红方'):
            fenpeipic = 'thirdphoto/fenpei_huanghong.PNG'
        elif (randfake == '黄方') and (randfake2 == '蓝方'):
            fenpeipic = 'thirdphoto/fenpei_huanglan.PNG'
        elif (randfake == '蓝方') and (randfake2 == '红方'):
            fenpeipic = 'thirdphoto/fenpei_lanhong.PNG'
        else :
            fenpeipic = 'thirdphoto/fenpei_lanhuang.PNG'
    ImageComponent image_11
      image [set every repeat] = $fenpeipic
      saveStartStop = False
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent text_26
      color = black
      letterHeight = 0.07
      pos = (-0.4, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $fenpeizhetxt
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    TextComponent text_27
      color = black
      letterHeight = 0.07
      pos = (0.4, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $jieshouzhetxt
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    KeyboardComponent key_resp_9
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine chouzhongjiemian2
    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Routine:
        chouzhongtxt1 = str(randfake) + '玩家  【分配者角色】'
        chouzhongtxt2 = str(randfake2) + '玩家  【接受者角色】'
    TextComponent text_14
      color = black
      letterHeight = 0.1
      pos = (0, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        抽中金钱分配游戏的玩家为：
    TextComponent text_18
      color = black
      letterHeight = 0.1
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $chouzhongtxt1
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    TextComponent text_19
      color = black
      letterHeight = 0.1
      pos = (0, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $chouzhongtxt2
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    TextComponent text_20
      color = black
      letterHeight = 0.08
      pos = (0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 未抽中的玩家请按Q键退出本界面
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    TextComponent text_21
      color = black
      letterHeight = 0.08
      pos = (0, -0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 抽中游戏的玩家请按空格键进入游戏规则界面
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    KeyboardComponent key_resp_10
      allowedKeys = 'q'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine xuanzechengfa
    CodeComponent code_10
      Code Type = Auto->JS
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      Begin Routine:
        xzcftxt1 = '您是否选择惩罚分配者[' + str(randfake)
        xzcftxt2 = xzcftxt1 + '玩家]'
    TextComponent text_24
      color = black
      letterHeight = 0.1
      pos = (-0.5, 0.9)
      startVal [time (s)] = 0.0
      text [set every repeat] = $xzcftxt2
      units = norm
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    TextComponent punish11
      color = black
      letterHeight = 0.15
      pos = (-0.4, 0)
      startVal [time (s)] = 0.0
      text = 惩罚
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    TextComponent hold11
      color = black
      letterHeight = 0.15
      pos = (0.4, 0)
      startVal [time (s)] = 0.0
      text = 保留
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    TextComponent FF
      color = black
      letterHeight = 0.15
      pos = (-0.4, -0.2)
      startVal [time (s)] = 0.0
      text = F键
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    TextComponent JJ
      color = black
      letterHeight = 0.15
      pos = (0.4, -0.2)
      startVal [time (s)] = 0.0
      text = J键
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    KeyboardComponent key_resp_8
      allowedKeys = 'f','j'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine randblank
    TextComponent text_12
      durationEstim = 1.5
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5+3*random()
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  Routine punishslide
    CodeComponent code_13
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp_9.keys == 'j' :
            continueRoutine = False

        if (randfake == '红方') and (randfake2 == '黄方'):
            slidefenpei = 'thirdphoto/wupei_honghuang.PNG'
        elif (randfake == '红方') and (randfake2 == '蓝方'):
            slidefenpei = 'thirdphoto/wupei_honglan.PNG'
        elif (randfake == '黄方') and (randfake2 == '红方'):
            slidefenpei = 'thirdphoto/wupei_huanghong.PNG'
        elif (randfake == '黄方') and (randfake2 == '蓝方'):
            slidefenpei = 'thirdphoto/wupei_huanglan.PNG'
        elif (randfake == '蓝方') and (randfake2 == '红方'):
            slidefenpei = 'thirdphoto/wupei_lanhong.PNG'
        else :
            slidefenpei = 'thirdphoto/wupei_lanhuang.PNG'
    ImageComponent image_12
      image [set every repeat] = $slidefenpei
      saveStartStop = False
      size = (2, 2)
      startVal [time (s)] = 0.0
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    SliderComponent slider
      borderColor = black
      color = black
      fillColor = $[0.0039, 0.0039, 0.0039]
      forceEndRoutine = False
      granularity = 1
      labels = '1','10','20','30'
      letterHeight = 0.06
      pos = (0, -0.65)
      size = (0.8, 0.07)
      startVal [time (s)] = 0.0
      styles = scrollbar
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10, 11, 12, 13, 14, 15, 16, 17, 18, 19, 20, 21, 22, 23, 24, 25, 26, 27, 28, 29, 30)
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    ImageComponent image_13
      image = thirdphoto\okbutton.png
      pos = (0, -0.85)
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [condition] = slider.rating
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    MouseComponent mouse
      clickable = image_13
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveStartStop = False
      startVal [condition] = slider.rating
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    CodeComponent code_15
      Code Type = Auto->JS
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      Each Frame:
        punishnum = slider.rating
        punishnumint1 = int(punishnum or 0)
        punishnumint2 = 3*punishnumint1
    TextComponent text_29
      color = black
      letterHeight = 0.06
      pos = (0.15, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $punishnumint1
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    TextComponent text_30
      color = black
      letterHeight = 0.06
      pos = (0.15, -0.55)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $punishnumint2
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    TextComponent text_31
      color = black
      letterHeight = 0.06
      pos = (-0.05, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 你付出的金币为:
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    TextComponent text_32
      color = black
      letterHeight = 0.06
      pos = (-0.1, -0.55)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 惩罚分配者的金额为:
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    TextComponent text_28
      color = black
      letterHeight = 0.06
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        请使用鼠标拖动滑动条，选择惩罚的金额
          拖动好后，请点击ok进入下一界面
    TextComponent text_33
      color = black
      letterHeight = 0.07
      pos = (-0.4, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $fenpeizhetxt
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    TextComponent text_34
      color = black
      letterHeight = 0.07
      pos = (0.4, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $jieshouzhetxt
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  Routine unfairrate
    ImageComponent image_14
      image = thirdphoto\bugongpingchengdu.PNG
      size = (2, 2)
      startVal [time (s)] = 0.0
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    KeyboardComponent unfair_rate
      allowedKeys = '1','2','3','4','5','6','7'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine guit2_rate
    CodeComponent code_16
      Code Type = Auto->JS
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      Begin Routine:
        if randfake == '红方':
            houcepic = 'thirdphoto/neijiu2_hong.PNG'
        elif randfake == '黄方':
            houcepic = 'thirdphoto/neijiu2_huang.PNG'
        else :
            houcepic = 'thirdphoto/neijiu2_lan.PNG'
    ImageComponent huobanchengxina_15
      image [set every repeat] = $houcepic
      size = (2, 2)
      startVal [time (s)] = 0.0
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    KeyboardComponent houceguilt2_rate
      allowedKeys = '1','2','3','4','5','6','7'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine guize1
    ImageComponent image_116
      image = thirdphoto\chengfa1.PNG
      saveStartStop = False
      size = (2, 2)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_111
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
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  Routine guize2
    ImageComponent image_117
      image = thirdphoto\chengfa2.PNG
      saveStartStop = False
      size = (2, 2)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_112
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
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  Routine guize3
    ImageComponent image_118
      image = thirdphoto\chengfa3.PNG
      saveStartStop = False
      size = (2, 2)
      startVal [time (s)] = 0
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    KeyboardComponent key_resp_113
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
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  Routine guize4
    ImageComponent image_119
      image = thirdphoto\chengfa4.PNG
      saveStartStop = False
      size = (2, 2)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_114
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
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  Routine guize5
    ImageComponent image_120
      image = thirdphoto\chengfa5.PNG
      saveStartStop = False
      size = (2, 2)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_115
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
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  Routine guize6
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  Routine guize7
    ImageComponent image_122
      image = thirdphoto\chengfa7.PNG
      saveStartStop = False
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.5
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    ImageComponent image_123
      image = thirdphoto\chengfa8.PNG
      saveStartStop = False
      size = (2, 2)
      startVal [time (s)] = 4.5
      stopVal [duration (s)] = 6
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    ImageComponent image_124
      image = thirdphoto\chengfa9.PNG
      saveStartStop = False
      size = (2, 2)
      startVal [time (s)] = 10.5
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    KeyboardComponent key_resp_117
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 11.5
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  Routine guize10
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  Routine guize12
    ImageComponent image_126
      image = thirdphoto\chengfa11.PNG
      saveStartStop = False
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.5
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    ImageComponent image_127
      image = thirdphoto\chengfa12.PNG
      saveStartStop = False
      size = (2, 2)
      startVal [time (s)] = 7.5
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    KeyboardComponent key_resp_119
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 8.5
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  Routine gundongfangan
    ImageComponent image_131
      image = thirdphoto\fanganzhanshi.PNG
      saveStartStop = False
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    ImageComponent image_128
      image = thirdphoto\gun1.PNG
      saveStartStop = False
      size = (2, 2)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 3
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    ImageComponent image_129
      image = thirdphoto\gun2.PNG
      saveStartStop = False
      size = (2, 2)
      startVal [time (s)] = 7
      stopVal [duration (s)] = 3
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    ImageComponent image_130
      image = thirdphoto\gun3.PNG
      saveStartStop = False
      size = (2, 2)
      startVal [time (s)] = 10
      stopVal [duration (s)] = 3
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Flow
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = random
    nReps = 100
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    Routine practice
    LoopInitiator practice_1 loopType="TrialHandler"
      conditionsFile = practice.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'dotnum': 19, 'feedbacktext': 'feedbackimage/feedback5.PNG', 'imagefile': 'randdot/13.png'},
        {'dotnum': 20, 'feedbacktext': 'feedbackimage/feedback6.PNG', 'imagefile': 'randdot/14.png'}]
      Routine fixation
      Routine trail1
      Routine feedback1
    LoopTerminator practice_1
    Routine practiceend
  LoopTerminator trials_2
  Routine chouhao
  Routine nichengfenpei
  Routine pipei
  Routine chengong
  Routine start
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = condition.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'dotnum': 19, 'imagefile': 'randdot/1.png'},
      {'dotnum': 20, 'imagefile': 'randdot/2.png'},
      {'dotnum': 21, 'imagefile': 'randdot/3.png'},
      {'dotnum': 19, 'imagefile': 'randdot/4.png'},
      {'dotnum': 20, 'imagefile': 'randdot/5.png'},
      {'dotnum': 21, 'imagefile': 'randdot/6.png'},
      {'dotnum': 19, 'imagefile': 'randdot/7.png'},
      {'dotnum': 20, 'imagefile': 'randdot/8.png'},
      {'dotnum': 21, 'imagefile': 'randdot/9.png'},
      {'dotnum': 19, 'imagefile': 'randdot/10.png'},
      {'dotnum': 20, 'imagefile': 'randdot/11.png'},
      {'dotnum': 21, 'imagefile': 'randdot/12.png'}]
    Routine fixation
    Routine trial
    Routine randblank
    Routine feedback3
    Routine ITI
  LoopTerminator trials
  Routine tongjia
  Routine jieguonene
  Routine guilt1
  Routine ceshi
  Routine chengshangqixia
  Routine youxi2jieshao
  Routine anotherwanjia
  Routine chouxuanren1
  Routine chouzhongjiemian2
  Routine guize1
  Routine guize2
  Routine guize3
  Routine guize4
  Routine guize5
  Routine guize6
  Routine guize7
  Routine guize10
  Routine guize12
  Routine dengdaifenpei
  Routine fenpeijiemian
  Routine punishslide
  Routine guit2_rate
  Routine gundongfangan
  Routine unfairrate
  Routine zuihoua
